opentrons/protocol-designer 8.0.1
schemaVersion: 8
protocolName: Test
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipetteLocationUpdate:
  p1000_single_gen2: {mount: left}
  p20_single_gen2: {mount: right}
labwareLocationUpdate:
  Opentrons OT-2 96 Tip Rack 1000 µL: {loadName: opentrons_96_tiprack_1000ul, namespace: opentrons, version: 1, location: 10}
  Opentrons OT-2 96 Tip Rack 20 µL: {loadName: opentrons_96_tiprack_20ul, namespace: opentrons, version: 1, location: 11}
  Rxn Mixture: {loadName: analyticalsalesandservices_96_wellplate_1000ul, namespace: custom_beta, version: 1, location: 4}
  Diluent: {loadName: 125mlnalgene_2_tuberack_125000ul, namespace: custom_beta, version: 1, location: 5}
  HPLC: {loadName: analyticalsalesandservices_48_tuberack_2000ul, namespace: custom_beta, version: 1, location: 6}
pipetteTiprackAssignments:
  p1000_single_gen2: opentrons/opentrons_96_tiprack_1000ul/1
  p20_single_gen2: opentrons/opentrons_96_tiprack_20ul/1
ingredients:
  - MeCN
  - Water
  - Rxn Mix
ingredLocations:
  Diluent:
    MeCN {volume: 60000}: A1
    Water {volume: 60000}: A2
  Rxn Mixture:
    Rxn Mix {volume: 1000}: A1-A8
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 500
  path: single
  changeTip: once
  aspirate_labware: Diluent
  aspirate_wells: A1
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  aspirate_mmFromBottom: 18
  dispense_labware: HPLC
  dispense_wells: A1-A8
  dispense_mmFromBottom: 10
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 500
  path: single
  changeTip: once
  aspirate_labware: Diluent
  aspirate_wells: A2
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  aspirate_mmFromBottom: 18
  dispense_labware: HPLC
  dispense_wells: A1-A8
  dispense_mmFromBottom: 10
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 10
  path: single
  changeTip: perSource
  aspirate_labware: Rxn Mixture
  aspirate_wells: A1-A8
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  aspirate_mmFromBottom: 5
  dispense_labware: HPLC
  dispense_wells: A1-A8
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 20
  dispense_mmFromBottom: 12
  dropTip_location: trashBin
labwareDefinitions:
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  custom_beta/analyticalsalesandservices_96_wellplate_1000ul/1:
    brand: {brand: Analytical Sales and Services, brandId: [96960]}
    metadata: {displayName: Analytical Sales And Services 96 Well Plate 1000 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.9, yDimension: 85.5, zDimension: 35}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: analyticalsalesandservices_96_wellplate_1000ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 32, totalLiquidVolume: 1000, shape: circular, diameter: 5.7, x: 14.4, y: 74.3, z: 3}
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  custom_beta/125mlnalgene_2_tuberack_125000ul/1:
    brand: {brand: 125ml nalgene, brandId: [n/a]}
    metadata: {displayName: 125ml nalgene 2 Tube Rack with 125ml nalgene 125 mL, displayCategory: tubeRack, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.9, yDimension: 85.5, zDimension: 95}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: 125mlnalgene_2_tuberack_125000ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 95, totalLiquidVolume: 125000, shape: circular, diameter: 27, x: 34.5, y: 43.1, z: 0}
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  custom_beta/analyticalsalesandservices_48_tuberack_2000ul/1:
    brand: {brand: analytical sales and services, brandId: [48012]}
    metadata: {displayName: analytical sales and services 48 Tube Rack with HPLC 2 mL, displayCategory: tubeRack, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.9, yDimension: 85.5, zDimension: 35}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: analyticalsalesandservices_48_tuberack_2000ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 31, totalLiquidVolume: 2000, shape: circular, diameter: 6.5, x: 18, y: 75.5, z: 4}
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commands:
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- pickUpTip: {pipetteId: p1000_single_gen2, labwareId: Opentrons OT-2 96 Tip Rack 1000 µL, wellName: A1}
- aspirate: {pipetteId: p1000_single_gen2, volume: 500, labwareId: Diluent, wellName: A1, wellLocation: {origin: bottom, offset: {z: 18}}, flowRate: 137.35}
- dispense: {pipetteId: p1000_single_gen2, volume: 500, labwareId: HPLC, wellName: A1, wellLocation: {origin: bottom, offset: {z: 10}}, flowRate: 137.35}
- aspirate: {pipetteId: p1000_single_gen2, volume: 500, labwareId: Diluent, wellName: A1, wellLocation: {origin: bottom, offset: {z: 18}}, flowRate: 137.35}
- dispense: {pipetteId: p1000_single_gen2, volume: 500, labwareId: HPLC, wellName: A2, wellLocation: {origin: bottom, offset: {z: 10}}, flowRate: 137.35}
- aspirate: {pipetteId: p1000_single_gen2, volume: 500, labwareId: Diluent, wellName: A1, wellLocation: {origin: bottom, offset: {z: 18}}, flowRate: 137.35}
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